PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 960]
  expName = MyProcedure
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine showing_movie
    RoutineSettingsComponent showing_movie
      stopVal [duration (s)] = 23
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    MovieComponent clips
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $stim_vids
      size = (2880, 1920)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
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  Routine showing_faces
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    ImageComponent mugshots
      image [set every repeat] = $stim_faces
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
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    ImageComponent grey_dot
      image = Display/black_dot-removebg-preview.png
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
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  Routine aligning_text
    RoutineSettingsComponent aligning_text
      disabled = True
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    TextComponent aligning_data_text
      letterHeight = 75
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      wrapWidth = 1500
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      text:
        On the onset of the red figure, quickly clench your jaw.

        Act quickly to align it!

        This is to align data, we're intentionally creating this noise.
  Routine aligning_image
    RoutineSettingsComponent aligning_image
      disabled = True
      stopVal [duration (s)] = 3.5
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    PolygonComponent polygon
      disabled = True
      fillColor = salmon
      lineColor = salmon
      shape = triangle
      size = (1000, 1000)
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 1.25
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  Routine explaining_task_text_2
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    TextComponent explaining_task_text
      letterHeight = 75
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
      text = For this task you will be asked to facially identify the culprit vs. the innocents. The culprit will be the player who scores.
      wrapWidth = 1500
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    TextComponent explaining_text_2
      letterHeight = 75
      startVal [time (s)] = 6
      stopVal [duration (s)] = 4
      wrapWidth = 1500
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      text:
        You will identify them by pressing
        f  (left hand key)   or    j  (right hand key)
        on your keyboard.
    TextComponent button_clarification_text
      letterHeight = 75
      startVal [time (s)] = 11
      stopVal [duration (s)] = 6
      text = Get ready to pay attention to a basketball clip! Remember the scorer's face.
      wrapWidth = 1500
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  Routine button_refresher
    RoutineSettingsComponent button_refresher
      stopVal [duration (s)] = 5.5
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    TextComponent text
      letterHeight = 75
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      wrapWidth = 1500
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      text:
        Did this person score?
        f  (left)  = this person / culprit
        j (right) = not this person / innocent
  Routine break_2
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j','enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    TextComponent text_2
      letterHeight = 75
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Take a little break if needed!
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    TextComponent text_3
      letterHeight = 75
      startVal [time (s)] = 2
      text = Press f, j, or space to continue to the next clip
      wrapWidth = 1500
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  Routine baseline_recording
    RoutineSettingsComponent baseline_recording
      disabled = True
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    TextComponent text_4
      letterHeight = 75
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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      text:
        Align your hands with:
        Your left index finger on f
        Your right index finger on j
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine baseline_recording
  Routine aligning_text
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine aligning_image
  LoopTerminator trials
  Routine baseline_recording
  Routine explaining_task_text_2
  LoopInitiator new_clip loopType="TrialHandler"
    conditionsFile = stim-vids.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stim_vids': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/24-Kobe-Bryant-(Lakers)-selected/Kobe-Bryant-Clip.mp4', 'start_index': 0, 'end_index': 5, 'repetitions': 2},
      {'stim_vids': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/11-Leemet-Bockler-(BC-Kalev)-selected/Leemet-Bockler-New-Clip.mp4', 'start_index': 5, 'end_index': 10, 'repetitions': 10},
      {'stim_vids': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/2-Cooper-Flagg-(Duke-Blue-Devils)-selected/Cooper-Flag-Clip2.mp4', 'start_index': 10, 'end_index': 15, 'repetitions': 10},
      {'stim_vids': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/23-Stephanie-Mavunga-(Poland)-selected/Stephanie-Mavunga-Clip2.mp4', 'start_index': 15, 'end_index': 20, 'repetitions': 10},
      {'stim_vids': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/9-Marcelinho-Huertas-(La-Laguna-Tenerife)-selected/Marcelinho-Huertas-Clip2.mp4', 'start_index': 20, 'end_index': 25, 'repetitions': 10},
      {'stim_vids': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/9-Terezia-Palenikova-(Slovakia)-selected/Terezia-Palenikova-Clip1.mp4', 'start_index': 25, 'end_index': 30, 'repetitions': 10}]
    Routine showing_movie
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine button_refresher
      LoopInitiator new_face loopType="TrialHandler"
        Selected rows = $str(start_index) + ":" + str(end_index)
        conditionsFile = stim-faces.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'stim_faces': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/24-Kobe-Bryant-(Lakers)-selected/$24-Kobe-Bryant.png', 'culprit': True},
          {'stim_faces': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/24-Kobe-Bryant-(Lakers)-selected/9-Matt-Barnes.png', 'culprit': False},
          {'stim_faces': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/24-Kobe-Bryant-(Lakers)-selected/14-Troy-Murphy.png', 'culprit': False},
          {'stim_faces': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/24-Kobe-Bryant-(Lakers)-selected/15-Metta-World-Peace.png', 'culprit': False},
          {'stim_faces': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/24-Kobe-Bryant-(Lakers)-selected/16-Pau-Gasol.png', 'culprit': False},
          {'stim_faces': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/11-Leemet-Bockler-(BC-Kalev)-selected/$11-Leemet-Bockler.png', 'culprit': True},
          {'stim_faces': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/11-Leemet-Bockler-(BC-Kalev)-selected/2-Kasper-Surorg.png', 'culprit': False},
          {'stim_faces': 'C:\\Users\\diego\\OneDrive\\Documents\\Coding\\Neurotech\\Neurocrime\\Display/11-Leemet-Bockler-(BC-Kalev)-selected/33-Martin-Meiers.png', 'culprit': False}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
        Routine showing_faces
      LoopTerminator new_face
    LoopTerminator trials_2
    Routine break_2
  LoopTerminator new_clip
  Routine baseline_recording
