PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Psychopy Draft
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Testing
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    ImageComponent image
      color = 0.8824, 0.9451, 1.0000
      image [set every repeat] = $img_file
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine FirstVid
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    TextComponent Question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Who Scored the point during this clip.
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = /Users/tonysaldana/Downloads/#2 Cooper Flagg (Duke Blue Devils)-selected/Cooper-Flag-Clip.mp4
      size = (1.0, 1.0)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 13.0
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    TextComponent Prompt
      letterHeight = 0.05
      startVal [time (s)] = 23.0
      stopVal [duration (s)] = 10.0
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      text:
        Press the key 'f' if they scored the point

        Press the key 'j' if they didn't score the point.
Flow
  Routine FirstVid
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Downloads/PsychoPy.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'img_file': '/Users/tonysaldana/Downloads#2 _Cooper_Flagg_(Duke Blue Devils)-selected//**#2_Cooper_Flagg.png'},
      {'img_file': '/Users/tonysaldana/Downloads/#2 _Cooper_Flagg_(Duke Blue Devils)-selected/#7_Kon_Knueppel.png'},
      {'img_file': '/Users/tonysaldana/Downloads/#2 _Cooper_Flagg_(Duke Blue Devils)-selected/#8_Darren_Harris.png'},
      {'img_file': '/Users/tonysaldana/Downloads/#2 _Cooper_Flagg_(Duke Blue Devils)-selected/#52_Stanley_Borden.png'},
      {'img_file': '/Users/tonysaldana/Downloads/#2 _Cooper_Flagg_(Duke Blue Devils)-selected/#55_Spencer_Hubbard.png'}]
    Routine Testing
  LoopTerminator trials
